OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.7.0)
Output Output 1

Channel units generator
  Number of channels = 4
  Unit = V
  Factor = 1e-06

Sinus oscillator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
Input signal=#2 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Noise generator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = Uniform

Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4

TCP Writer
  Port = 5678
  Output format = Raw
